---
API: 3
Title: Boundary paradigm
Description: Gaze-contingent display change (Rayner, 1975)
OpenSesame: 4.1.0
Platform: posix
---
set width 1024
set height 768
set uniform_coordinates yes
set transparent_variables no
set title "Boundary paradigm"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set color_backend legacy
set canvas_backend legacy
set clock_backend legacy
set sampler_backend legacy
set fullscreen no
set font_size 24
set font_family mono
set font_bold no
set font_italic no
set font_underline no
set foreground black
set background white
set bidi no
set compensation 0
set coordinates relative
set description "Gaze-contingent display change (Rayner, 1975)"
define sequence experiment
	set flush_keyboard yes
	set description "Main sequence"
	run pygaze_init always
	run instructions always
	run trial_loop always
	run goodbye always

define sequence trial_sequence
	set flush_keyboard yes
	set description "One trial"
	run drift_correct always
	run start_recording always
	run log_trial always
	run trial_display always
	run stop_recording always
	run logger always

define pygaze_init pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set calibrate yes
	set calbeep no
	set _logfile automatic
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set eyelink_force_drift_correct yes
	set eyelink_pupil_size_mode area
	set smi_ip 127.0.0.1
	set smi_send_port 4444
	set smi_recv_port 5555
	set tobiiglasses_address 192.168.71.50
	set tobiiglasses_udpport 49152
	set description "Initialize and calibrate the eye tracker (advanced dummy: mouse = gaze)"

define pygaze_drift_correct drift_correct
	set xpos -400
	set ypos 0
	set fixation_triggered no
	set target_color "[foreground]"
	set target_style default
	set draw_target yes
	set description "Drift correction (click / space on the target)"

define pygaze_start_recording start_recording
	set status_msg start_trial
	set description "Start recording"

define pygaze_stop_recording stop_recording
	set status_msg stop_trial
	set description "Stop recording"

define pygaze_log log_trial
	set throttle 2
	set auto_log no
	set msg "TRIALINFO item={item}"
	set description "Log trial info"

define logger logger
	set description "Default logger"
	set auto_log yes

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "Instructions"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Read each sentence silently.<br />Press SPACE when you are done.<br /><br />Press any key to start" x=0 y=0 z_index=0

define sketchpad goodbye
	set start_response_interval no
	set duration keypress
	set description "Goodbye"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="The experiment is finished.<br />Thank you!" x=0 y=0 z_index=0

define loop trial_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Trials (stimulus table)"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	set column_order "item;preview;target;sentence"
	setcycle 0 item "1"
	setcycle 0 preview "tabie"
	setcycle 0 target "table"
	setcycle 0 sentence "The waiter put the TARGET near the window."
	setcycle 1 item "2"
	setcycle 1 preview "chorr"
	setcycle 1 target "chair"
	setcycle 1 sentence "The teacher pulled the TARGET toward the desk."
	setcycle 2 item "3"
	setcycle 2 preview "hovse"
	setcycle 2 target "house"
	setcycle 2 sentence "The family bought the TARGET beside the river."
	run trial_sequence

define inline_script trial_display
	set description "Boundary paradigm: swap preview for target when gaze crosses the boundary"
	___prepare__
	from openexp.canvas import Canvas
	from openexp.keyboard import Keyboard
	W, H = var.width, var.height
	kb = Keyboard(exp, keylist=['space', 'escape'], timeout=1)
	LEFT = -W // 2 + 100                      # left edge of text (relative coords)
	_probe = Canvas(exp)
	CHARW = _probe.text_size('x')[0]          # mono font: constant char width


	def text_canvas(txt):
	    c = Canvas(exp)
	    c.text(txt, center=False, x=LEFT, y=-CHARW, color='black')
	    return c


	def gaze_char(n):
	    """Index of the character currently fixated (gaze in screen px)."""
	    gx = eyetracker.sample()[0]
	    return int((gx - W / 2 - LEFT) // CHARW)

	pre = var.sentence.replace('TARGET', var.preview)
	tar = var.sentence.replace('TARGET', var.target)
	pre_canvas = text_canvas(pre)
	tar_canvas = text_canvas(tar)
	boundary_char = var.sentence.index('TARGET') - 1   # the space before the target
	__end__
	___run__
	pre_canvas.show()
	eyetracker.log('STIMONSET preview=%s' % var.preview)
	changed = False
	while True:
	    key, _ = kb.get_key(timeout=1)
	    if key in ('space', 'escape'):
	        break
	    if not changed and gaze_char(0) > boundary_char:   # gaze crossed the invisible boundary
	        tar_canvas.show()
	        eyetracker.log('DISPLAYCHANGE target=%s' % var.target)
	        changed = True
	var.display_changed = int(changed)
	eyetracker.log('TRIALEND changed=%d' % changed)
	__end__

