---
API: 3
Title: Visual world paradigm
Description: Four-object visual world with gaze-sample counting
OpenSesame: 4.1.0
Platform: posix
---
set width 1024
set height 768
set uniform_coordinates yes
set transparent_variables no
set title "Visual world paradigm"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set color_backend legacy
set canvas_backend legacy
set clock_backend legacy
set sampler_backend legacy
set fullscreen no
set font_size 24
set font_family mono
set font_bold no
set font_italic no
set font_underline no
set foreground black
set background white
set bidi no
set compensation 0
set coordinates relative
set description "Four-object visual world with gaze-sample counting"
define sequence experiment
	set flush_keyboard yes
	set description "Main sequence"
	run pygaze_init always
	run instructions always
	run trial_loop always
	run goodbye always

define sequence trial_sequence
	set flush_keyboard yes
	set description "One trial"
	run drift_correct always
	run start_recording always
	run log_trial always
	run trial_display always
	run stop_recording always
	run logger always

define pygaze_init pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set calibrate yes
	set calbeep no
	set _logfile automatic
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set eyelink_force_drift_correct yes
	set eyelink_pupil_size_mode area
	set smi_ip 127.0.0.1
	set smi_send_port 4444
	set smi_recv_port 5555
	set tobiiglasses_address 192.168.71.50
	set tobiiglasses_udpport 49152
	set description "Initialize and calibrate the eye tracker (advanced dummy: mouse = gaze)"

define pygaze_drift_correct drift_correct
	set xpos 0
	set ypos 0
	set fixation_triggered no
	set target_color "[foreground]"
	set target_style default
	set draw_target yes
	set description "Drift correction (click / space on the target)"

define pygaze_start_recording start_recording
	set status_msg start_trial
	set description "Start recording"

define pygaze_stop_recording stop_recording
	set status_msg stop_trial
	set description "Stop recording"

define pygaze_log log_trial
	set throttle 2
	set auto_log no
	set msg "TRIALINFO item={item}"
	set description "Log trial info"

define logger logger
	set description "Default logger"
	set auto_log yes

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "Instructions"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Listen to the instruction and look at the named object.<br /><br />Press any key to start" x=0 y=0 z_index=0

define sketchpad goodbye
	set start_response_interval no
	set duration keypress
	set description "Goodbye"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="The experiment is finished.<br />Thank you!" x=0 y=0 z_index=0

define loop trial_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Trials (stimulus table)"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if False
	set column_order "item;sentence;target;competitor;distractor1;distractor2"
	setcycle 0 item "1"
	setcycle 0 sentence "Click on the candle"
	setcycle 0 target "candle"
	setcycle 0 competitor "candy"
	setcycle 0 distractor1 "chair"
	setcycle 0 distractor2 "apple"
	setcycle 1 item "2"
	setcycle 1 sentence "Click on the beetle"
	setcycle 1 target "beetle"
	setcycle 1 competitor "beaker"
	setcycle 1 distractor1 "lamp"
	setcycle 1 distractor2 "shoe"
	run trial_sequence

define inline_script trial_display
	set description "Visual world: show 4 objects, play instruction, count gaze samples per object"
	___prepare__
	import random
	from openexp.canvas import Canvas
	from openexp.keyboard import Keyboard
	from openexp.mouse import Mouse
	W, H = var.width, var.height
	SIZE = 200
	POS = [(-W // 4, -H // 4), (W // 4, -H // 4), (-W // 4, H // 4), (W // 4, H // 4)]
	objects = [var.target, var.competitor, var.distractor1, var.distractor2]
	random.shuffle(objects)
	var.target_position = objects.index(var.target)


	def scene(instruction=None):
	    c = Canvas(exp)
	    for name, (x, y) in zip(objects, POS):
	        c.rect(x - SIZE // 2, y - SIZE // 2, SIZE, SIZE, color='black')
	        c.text(name, x=x, y=y)           # replace by c.image('name.png', ...) for real pictures
	    c.fixdot()
	    if instruction:
	        c.text(instruction, y=-H // 2 + 40)
	    return c


	def region(gx, gy):
	    for i, (x, y) in enumerate(POS):
	        if abs(gx - W / 2 - x) <= SIZE // 2 and abs(gy - H / 2 - y) <= SIZE // 2:
	            return i
	    return None


	preview, spoken = scene(), scene(var.sentence)
	kb = Keyboard(exp, keylist=['space', 'escape'], timeout=1)
	__end__
	___run__
	preview.show()
	eyetracker.log('PREVIEW_ONSET')
	clock.sleep(1000)
	spoken.show()
	eyetracker.log('SPOKEN_ONSET')              # play a sampler here for real audio
	t0 = clock.time()
	counts = [0] * 4
	while clock.time() - t0 < 4000:
	    gx, gy = eyetracker.sample()
	    r = region(gx, gy)
	    if r is not None:
	        counts[r] += 1
	    clock.sleep(10)
	for name, n in zip(objects, counts):
	    eyetracker.log('SAMPLES object=%s n=%d' % (name, n))
	var.target_samples = counts[var.target_position]
	eyetracker.log('TRIALEND')
	__end__

